PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s' %(expInfo['participant'], expName)
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = SCIAT IAT and likerts
  logging level = warning
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        msg1=""

        # dertermine the condition based on the modulo of the participant code
        # i.e., if the remained of the participant code divided by 4 = 1, run condition 1, etc.
        participant = int(expInfo['participant'])
        if (participant % 2) == 1:
            taskFile = "blocks_A.xlsx"
        elif (participant % 2) == 0:
            taskFile = "blocks_B.xlsx"
        else:
            print "****condition file error****"
      Each Frame:
        if len(feedbackResponse.keys)<1:
            msg1=""
        else:
            msg1="X"
    ImageComponent stimulusImage
      startVal [time (s)] = 0.3
      image [set every repeat] = $imageStimulus
      size = .4
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    TextComponent stimulusBox
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent requiredResponse
      correctAns = $requiredKey
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent feedbackResponse
      correctAns = $feedbackKey
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackAllowed
      startVal [time (s)] = 0.3
      store = first key
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    TextComponent accuracyFeedback
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent target1box
      color [set every repeat] = $colourA
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target2box
      color [set every repeat] = $colourA
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box
      color [set every repeat] = $colourB
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $attribute1
    TextComponent attribute2box
      color [set every repeat] = $colourB
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox
      color [set every repeat] = $colourA
      text [set every repeat] = $orStimulusLeft
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox
      color [set every repeat] = $colourA
      text [set every repeat] = $orStimulusRight
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text
      text = End of experiment
      stopVal [duration (s)] = 2
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine instructions
    TextComponent instructionsBox
      color [set every repeat] = $colourA
      text [set every repeat] = $instruction
      pos = [0, -.15]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    KeyboardComponent responseContinue
      correctAns = $requiredResponse
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.5
      store = nothing
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    TextComponent target1box_inst
      color [set every repeat] = $colourA
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent target2box_inst
      color [set every repeat] = $colourA
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent attribute1box_inst
      color [set every repeat] = $colourB
      text [set every repeat] = $attribute1
      pos = [-.6, 0.55]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent attribute2box_inst
      color [set every repeat] = $colourB
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent orLeftBox_inst
      color [set every repeat] = $colourA
      text [set every repeat] = $orStimulusLeft
      pos = [-.6, .7]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent orRightBox_inst
      color [set every repeat] = $colourA
      text [set every repeat] = $orStimulusRight
      pos = [.6, .7]
      startVal [time (s)] = 1
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $taskFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block
      loopType = random
      nReps = $nBlockRepeats
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
